begin model

begin parameters
  NA      6.022e23
  ITERATIONS 10000
  V 1e-15
  NA_V 6.022e23 * V
  VOL_RXN 1
  MCELL_REDEFINE_VOL_RXN NA_V
  D 1e-3
  MCELL_DIFFUSION_CONSTANT_3D_Ca D
  MCELL_DIFFUSION_CONSTANT_3D_CaM D
  MCELL_DIFFUSION_CONSTANT_3D_RyR2 0	



# For Ca-CaM binding use Faas, Raghavachari, Lisman & Mody, 2011 
# possibly one has to go back to Sunita Nadkarni's (Mahajan & Nadkarni, 2018)
  # k1c_on = 6.8/(NA*V)  ## /uM/s
  # k1c_off = 68  ## /s
  # k2c_on = 6.8/(NA*V) ## /uM/s
  # k2c_off = 10 ## /s
  # k1n_on = 108/(NA*V) ## /uM/s	
  # k1n_off = 4150 ## /s
  # k2n_on = 108/(NA*V) ## /uM/s
  # k2n_off = 800 ## /s
 #Varun's original constants:
  # kon1c     9.3/(NA*V)  
  # koff1c    70
  # kon1n     260/(NA*V)
  # koff1n    4000
  # kon2c     25/(NA*V)
  # koff2c    10
  # kon2n     300/(NA*V)
  # koff2n    1000


#Guido Faas's constants:
  kon1c     168/(NA*V)  
  koff1c    2.6e3
  kon1n     15.4e2/(NA*V)
  koff1n    16000
  kon2c     25/(NA*V)
  koff2c    13
  kon2n     3.2e4/(NA*V)
  koff2n    4.4e4

  konRyR1C 1680/(NA*V)
  koffRyR1C 2.6e3
  konRyR2C 25/(NA*V)
  koffRyR2C 13
  konRyR1N 15.4e3/(NA*V)
  koffRyR1N 16000
  konRyR2N 3.2e4/(NA*V)
  koffRyR2N 4.4e4
  
  konRyR_CaM    2.1e-2/(NA*V)
  koffRyR_CaM   1.73e-2
  konRyR_CaMN    2.1e-1/(NA*V)
  koffRyR_CaMN   1.73e-2
  konRyR_CaMC    2.1e-2/(NA*V)
  koffRyR_CaMC   1.73e-3
  konRyR_CaMCN    2.1e-1/(NA*V)
  koffRyR_CaMCN   1.73e-3

  konCaRyR_CaM 2.1e-2/(NA*V)
  koffCaRyR_CaM 3*1.73e-2
  konCaRyR_CaMN    2.1e-1/(NA*V)
  koffCaRyR_CaMN   3*1.73e-2
  konCaRyR_CaMC    2.1e-2/(NA*V)
  koffCaRyR_CaMC   3*1.73e-3
  konCaRyR_CaMCN    2.1e-1/(NA*V)
  koffCaRyR_CaMCN   3*1.73e-3

  konRyR_Ca  1e3/(NA*V)
  koffRyR_Ca 1e3	

  konRyRCaM_Ca 1e3/(NA*V)
  koffRyRCaM_Ca 3e3

  konO1 2.79e3
  koffO1 0.33e3
  konO2 2.79e3
  koffO2 0.33e3
  konC1 0.25e3
  koffC1 0.6e3
  konI 11.28e3
  koffI 0.05e3
  kRyRfon 90 # 1/s  10.3390/biom12111577

  Ca0 1e-7*NA_V # Basal calcium concentration # 1/M Nr_ca_molecules
  CaER0 3e-4*NA_V
  CaM0 4e-6*NA_V
 
end parameters

begin compartments
    #Endoplasmic reticulum lumen (ERL) 3D compartment with volume 0.1e-3um^3
    #
    ERL 3 0.1e-3um^3 ERM
    # Endoplasmic reticulum membrane (PM) 2D compartment with volume 0.01 um x SA um^2
    ERM 2 10e-4
    # Cytoplasm (CP) 3D volume compartment with volume 0.4e-3um^3
    CP 3 0.4e-3 
end compartments



begin molecule types
  Ca@CP Ca0
  Ca@ERL CaER0
  CaM(C~0~1~2,N~0~1~2,ryr2)@CP CaM0
  CaM(C~0~1~2,N~0~1~2,ryr2)@ERM 0
  RyR2@ERM (r,l,Ca~0~1,CaM,S~0~1~2) 60 # Rangamani 2025
  #S~0 -- closed, S~1 -- open,S~2 -- inhibited
end molecule types

 

begin species
  CaM(C~0,N~0,ryr2)@CP   CaM0  
  Ca()@CP      Ca0
  Ca()@ERL CaER0
  RyR2(r!1,l!4,Ca~0,CaM,S~0).RyR2(r!2,l!1,Ca~0,CaM,S~0).RyR2(r!3,l!2,Ca~0,CaM,S~0).RyR2(r!4,l!3,Ca~0,CaM,S~0)@ERM   60 # Rangamani
end  species

begin observables
  Molecules Cafree Ca
  Molecules CaM0  CaM(C~0,N~0,ryr2)
  Molecules CaM1C CaM(C~1,N~0,ryr2)
  Molecules CaM2C CaM(C~2,N~0,ryr2)
  Molecules CaM1N CaM(C~0,N~1,ryr2)
  Molecules CaM2N CaM(C~0,N~2,ryr2)
  Molecules CaM1C1N CaM(C~1,N~1,ryr2)
  Molecules CaM2C1N CaM(C~2,N~1,ryr2)  
  Molecules CaM1C2N CaM(C~1,N~2,ryr2)
  Molecules CaM4 CaM(C~2,N~2,ryr2)
  Molecules RyR2_1CaM  RyR2(r!1,l!4,Ca~0,CaM!+,S~0).RyR2(r!2,l!1,Ca~0,CaM,S~0).RyR2(r!3,l!2,Ca~0,CaM,S~0).RyR2(r!4,l!3,Ca~0,CaM,S~0) RyR2(r!1,l!4,Ca~0,CaM,S~0).RyR2(r!2,l!1,Ca~0,CaM!+,S~0).RyR2(r!3,l!2,Ca~0,CaM,S~0).RyR2(r!4,l!3,Ca~0,CaM,S~0) RyR2(r!1,l!4,Ca~0,CaM,S~0).RyR2(r!2,l!1,Ca~0,CaM,S~0).RyR2(r!3,l!2,Ca~0,CaM!+,S~0).RyR2(r!4,l!3,Ca~0,CaM,S~0) RyR2(r!1,l!4,Ca~0,CaM,S~0).RyR2(r!2,l!1,Ca~0,CaM,S~0).RyR2(r!3,l!2,Ca~0,CaM,S~0).RyR2(r!4,l!3,Ca~0,CaM!+,S~0)
  Molecules RyR2_2CaM  RyR2(r!1,l!4,Ca~0,CaM!+,S~0).RyR2(r!2,l!1,Ca~0,CaM!+,S~0).RyR2(r!3,l!2,Ca~0,CaM,S~0).RyR2(r!4,l!3,Ca~0,CaM,S~0), RyR2(r!1,l!4,Ca~0,CaM!+,S~0).RyR2(r!2,l!1,Ca~0,CaM,S~0).RyR2(r!3,l!2,Ca~0,CaM!+,S~0).RyR2(r!4,l!3,Ca~0,CaM,S~0), RyR2(r!1,l!4,Ca~0,CaM!+,S~0).RyR2(r!2,l!1,Ca~0,CaM,S~0).RyR2(r!3,l!2,Ca~0,CaM,S~0).RyR2(r!4,l!3,Ca~0,CaM!+,S~0), RyR2(r!1,l!4,Ca~0,CaM,S~0).RyR2(r!2,l!1,Ca~0,CaM!+,S~0).RyR2(r!3,l!2,Ca~0,CaM!+,S~0).RyR2(r!4,l!3,Ca~0,CaM,S~0), RyR2(r!1,l!4,Ca~0,CaM,S~0).RyR2(r!2,l!1,Ca~0,CaM!+,S~0).RyR2(r!3,l!2,Ca~0,CaM,S~0).RyR2(r!4,l!3,Ca~0,CaM!+,S~0), RyR2(r!1,l!4,Ca~0,CaM,S~0).RyR2(r!2,l!1,Ca~0,CaM,S~0).RyR2(r!3,l!2,Ca~0,CaM!+,S~0).RyR2(r!4,l!3,Ca~0,CaM!+,S~0)
  Molecules RyR2_3CaM RyR2(r!1,l!4,Ca~0,CaM!+,S~0).RyR2(r!2,l!1,Ca~0,CaM!+,S~0).RyR2(r!3,l!2,Ca~0,CaM!+,S~0).RyR2(r!4,l!3,Ca~0,CaM,S~0), RyR2(r!1,l!4,Ca~0,CaM,S~0).RyR2(r!2,l!1,Ca~0,CaM!+,S~0).RyR2(r!3,l!2,Ca~0,CaM,S~0).RyR2(r!4,l!3,Ca~0,CaM!+,S~0), RyR2(r!1,l!4,Ca~0,CaM!+,S~0).RyR2(r!2,l!1,Ca~0,CaM,S~0).RyR2(r!3,l!2,Ca~0,CaM!+,S~0).RyR2(r!4,l!3,Ca~0,CaM!+,S~0), RyR2(r!1,l!4,Ca~0,CaM!+,S~0).RyR2(r!2,l!1,Ca~0,CaM!+,S~0).RyR2(r!3,l!2,Ca~0,CaM,S~0).RyR2(r!4,l!3,Ca~0,CaM!+,S~0)
  Molecules RyR2_4CaM RyR2(r!1,l!4,Ca~0,CaM!+,S~0).RyR2(r!2,l!1,Ca~0,CaM!+,S~0).RyR2(r!3,l!2,Ca~0,CaM,S~0).RyR2(r!4,l!3,Ca~0,CaM!+,S~0)
  

end observables



begin reaction rules
 r_RyR2CaM_ctrl_1a: Ca + RyR2(Ca~0,CaM,S~0) -> RyR2(Ca~1,CaM,S~0) konRyR_Ca
 r_RyR2CaM_ctrl_1b: RyR2(Ca~1,CaM,S~0) -> Ca + RyR2(Ca~0,CaM,S~0) koffRyR_Ca	
 r_RyR2CaM_ctrl_2a: RyR2(Ca~1,CaM,S~0) -> RyR2(Ca~1,CaM,S~1) konO1
 r_RyR2CaM_ctrl_2b: RyR2(Ca~1,CaM,S~1) -> RyR2(Ca~1,CaM,S~0) koffO1		
 r_RyR2CaM_ctrl_3a: Ca + CaM(C~0,ryr2) -> CaM(C~1,ryr2) kon1c
 r_RyR2CaM_ctrl_3b: CaM(C~1,ryr2) -> Ca + CaM(C~0,ryr2) koff1c	
 r_RyR2CaM_ctrl_4a: Ca + CaM(N~0,ryr2) -> CaM(N~1,ryr2) kon1n
 r_RyR2CaM_ctrl_4b: CaM(N~1,ryr2) -> Ca + CaM(N~0,ryr2) koff1n
 r_RyR2CaM_ctrl_5a: Ca + CaM(C~1,ryr2) -> CaM(C~2,ryr2) kon2c
 r_RyR2CaM_ctrl_5b: CaM(C~2,ryr2) -> Ca + CaM(C~1,ryr2) koff2c	
 r_RyR2CaM_ctrl_6a: Ca + CaM(N~1,ryr2) -> CaM(N~2,ryr2) kon2n
 r_RyR2CaM_ctrl_6b: CaM(N~2,ryr2) -> Ca + CaM(N~1,ryr2) koff2n
 
 
 r_RyR2CaM_ctrl_7a: Ca + CaM(ryr2!1).RyR2(Ca~0,CaM!1) -> CaM(ryr2!1).RyR2(Ca~1,CaM!1) konRyRCaM_Ca
 r_RyR2CaM_ctrl_7b: CaM(ryr2!1).RyR2(Ca~1,CaM!1) -> Ca + CaM(ryr2!1).RyR2(Ca~0,CaM!1) koffRyRCaM_Ca

 r_RyR2CaM_ctrl_8a: CaM(C~0,N~0,ryr2) + RyR2(Ca~0,CaM) -> CaM(C~0,N~0,ryr2!1).RyR2(Ca~0,CaM!1) konRyR_CaM
 r_RyR2CaM_ctrl_8b: CaM(C~0,N~0,ryr2!1).RyR2(Ca~0,CaM!1) -> CaM(C~0,N~0,ryr2) + RyR2(Ca~0,CaM) koffRyR_CaM
 
 r_RyR2CaM_ctrl_9a: CaM(C~0,N~0,ryr2) + RyR2(Ca~1,CaM) -> CaM(C~0,N~0,ryr2!1).RyR2(Ca~1,CaM!1) konCaRyR_CaM
 r_RyR2CaM_ctrl_9b: CaM(C~0,N~0,ryr2!1).RyR2(Ca~1,CaM!1) -> CaM(C~0,N~0,ryr2) + RyR2(Ca~1,CaM) koffCaRyR_CaM
 
 r_RyR2CaM_ctrl_10a: CaM(C~1,N~0,ryr2) + RyR2(Ca~0,CaM) -> CaM(C~1,N~0,ryr2!1).RyR2(Ca~0,CaM!1) konRyR_CaMC
 r_RyR2CaM_ctrl_10b: CaM(C~1,N~0,ryr2!1).RyR2(Ca~0,CaM!1) -> CaM(C~1,N~0,ryr2) + RyR2(Ca~0,CaM) koffRyR_CaMC
 
 r_RyR2CaM_ctrl_11a: CaM(C~1,N~0,ryr2) + RyR2(Ca~1,CaM) -> CaM(C~1,N~0,ryr2!1).RyR2(Ca~1,CaM!1) konCaRyR_CaMC
 r_RyR2CaM_ctrl_11b: CaM(C~1,N~0,ryr2!1).RyR2(Ca~1,CaM!1) -> CaM(C~1,N~0,ryr2) + RyR2(Ca~1,CaM) koffCaRyR_CaMC
 
 r_RyR2CaM_ctrl_12a: CaM(C~2,N~0,ryr2) + RyR2(Ca~0,CaM) -> CaM(C~2,N~0,ryr2!1).RyR2(Ca~0,CaM!1) koffRyR_CaMC
 r_RyR2CaM_ctrl_12b: CaM(C~2,N~0,ryr2!1).RyR2(Ca~0,CaM!1) -> CaM(C~2,N~0,ryr2) + RyR2(Ca~0,CaM) koffRyR_CaMC
 
 r_RyR2CaM_ctrl_13a: CaM(C~2,N~0,ryr2) + RyR2(Ca~1,CaM) -> CaM(C~2,N~0,ryr2!1).RyR2(Ca~1,CaM!1) konCaRyR_CaMC
 r_RyR2CaM_ctrl_13b: CaM(C~2,N~0,ryr2!1).RyR2(Ca~1,CaM!1) -> CaM(C~2,N~0,ryr2) + RyR2(Ca~1,CaM) koffCaRyR_CaMC
 
 r_RyR2CaM_ctrl_14a: CaM(C~0,N~1,ryr2) + RyR2(Ca~0,CaM) -> CaM(C~0,N~1,ryr2!1).RyR2(Ca~0,CaM!1) konRyR_CaMN
 r_RyR2CaM_ctrl_14b: CaM(C~0,N~1,ryr2!1).RyR2(Ca~0,CaM!1) -> CaM(C~0,N~1,ryr2) + RyR2(Ca~0,CaM) koffRyR_CaMN
 
 r_RyR2CaM_ctrl_15a: CaM(C~0,N~1,ryr2) + RyR2(Ca~1,CaM) -> CaM(C~0,N~1,ryr2!1).RyR2(Ca~1,CaM!1) konCaRyR_CaMN
 r_RyR2CaM_ctrl_15b: CaM(C~0,N~1,ryr2!1).RyR2(Ca~1,CaM!1) -> CaM(C~0,N~1,ryr2) + RyR2(Ca~1,CaM) koffCaRyR_CaMN
 
 r_RyR2CaM_ctrl_16a: CaM(C~0,N~2,ryr2) + RyR2(Ca~0,CaM) -> CaM(C~0,N~2,ryr2!1).RyR2(Ca~0,CaM!1) konRyR_CaMN
 r_RyR2CaM_ctrl_16b: CaM(C~0,N~2,ryr2!1).RyR2(Ca~0,CaM!1) -> CaM(C~0,N~2,ryr2) + RyR2(Ca~0,CaM) koffRyR_CaMN
 
 r_RyR2CaM_ctrl_17a: CaM(C~0,N~2,ryr2) + RyR2(Ca~1,CaM) -> CaM(C~0,N~2,ryr2!1).RyR2(Ca~1,CaM!1) konCaRyR_CaMN
 r_RyR2CaM_ctrl_17b: CaM(C~0,N~2,ryr2!1).RyR2(Ca~1,CaM!1) -> CaM(C~0,N~2,ryr2) + RyR2(Ca~1,CaM) koffCaRyR_CaMN
 
 r_RyR2CaM_ctrl_18a: CaM(C~1,N~1,ryr2) + RyR2(Ca~0,CaM) -> CaM(C~1,N~1,ryr2!1).RyR2(Ca~0,CaM!1) konRyR_CaMCN
 r_RyR2CaM_ctrl_18b: CaM(C~1,N~1,ryr2!1).RyR2(Ca~0,CaM!1) -> CaM(C~1,N~1,ryr2) + RyR2(Ca~0,CaM) koffRyR_CaMCN

 r_RyR2CaM_ctrl_19a: CaM(C~1,N~2,ryr2) + RyR2(Ca~1,CaM) -> CaM(C~1,N~2,ryr2!1).RyR2(Ca~1,CaM!1) konCaRyR_CaMCN
 r_RyR2CaM_ctrl_19b: CaM(C~1,N~2,ryr2!1).RyR2(Ca~1,CaM!1) -> CaM(C~1,N~2,ryr2) + RyR2(Ca~1,CaM) koffCaRyR_CaMCN

 r_RyR2CaM_ctrl_20a: CaM(C~2,N~1,ryr2) + RyR2(Ca~0,CaM) -> CaM(C~2,N~1,ryr2!1).RyR2(Ca~0,CaM!1) konRyR_CaMCN
 r_RyR2CaM_ctrl_20b: CaM(C~2,N~1,ryr2!1).RyR2(Ca~0,CaM!1) -> CaM(C~2,N~1,ryr2) + RyR2(Ca~0,CaM) koffRyR_CaMCN

 r_RyR2CaM_ctrl_21a: CaM(C~2,N~2,ryr2) + RyR2(Ca~1,CaM) -> CaM(C~2,N~2,ryr2!1).RyR2(Ca~1,CaM!1) konCaRyR_CaMCN
 r_RyR2CaM_ctrl_21b: CaM(C~2,N~2,ryr2!1).RyR2(Ca~1,CaM!1) -> CaM(C~2,N~2,ryr2) + RyR2(Ca~1,CaM) koffCaRyR_CaMCN

 r_RyR2CaM_ctrl_22a: Ca + CaM(C~0,ryr2!1).RyR2(CaM!1) -> CaM(C~1,ryr2!1).RyR2(CaM!1) konRyR1C
 r_RyR2CaM_ctrl_22b: CaM(C~1,ryr2!1).RyR2(CaM!1) -> Ca + CaM(C~0,ryr2!1).RyR2(CaM!1) koffRyR1C

 r_RyR2CaM_ctrl_23a: Ca + CaM(C~1,ryr2!1).RyR2(CaM!1) -> CaM(C~2,ryr2!1).RyR2(CaM!1) konRyR2C
 r_RyR2CaM_ctrl_23b: CaM(C~2,ryr2!1).RyR2(CaM!1) -> Ca + CaM(C~1,ryr2!1).RyR2(CaM!1) koffRyR2C

 r_RyR2CaM_ctrl_24a: Ca + CaM(N~0,ryr2!1).RyR2(CaM!1) -> CaM(N~1,ryr2!1).RyR2(CaM!1) konRyR1N
 r_RyR2CaM_ctrl_24b: CaM(N~1,ryr2!1).RyR2(CaM!1) -> Ca + CaM(N~0,ryr2!1).RyR2(CaM!1) koffRyR1N

 r_RyR2CaM_ctrl_25a: CaM(ryr2!1).RyR2(Ca~1,CaM!1,S~0) -> CaM(ryr2!1).RyR2(Ca~1,CaM!1,S~1) konO2
 r_RyR2CaM_ctrl_25b: CaM(ryr2!1).RyR2(Ca~1,CaM!1,S~1) -> CaM(ryr2!1).RyR2(Ca~1,CaM!1,S~0) koffO2

 r_RyR2CaM_ctrl_26a: CaM(C~2,N~2,ryr2!1).RyR2(Ca~1,CaM!1,S~1) -> CaM(C~2,N~2,ryr2!1).RyR2(Ca~1,CaM!1,S~2) konI
 r_RyR2CaM_ctrl_26b: CaM(C~2,N~2,ryr2!1).RyR2(Ca~1,CaM!1,S~2) -> CaM(C~2,N~2,ryr2!1).RyR2(Ca~1,CaM!1,S~1) koffI

 flux_RyR2CaM_1: RyR2(r!1,l!4,Ca~1,CaM,S~1).RyR2(r!2,l!1,Ca~1,CaM,S~1).RyR2(r!3,l!2,Ca~1,CaM,S~1).RyR2(r!4,l!3,Ca~1,CaM,S~1)@ERM + Ca@ERL -> RyR2(r!1,l!4,Ca~1,CaM,S~1).RyR2(r!2,l!1,Ca~1,CaM,S~1).RyR2(r!3,l!2,Ca~1,CaM,S~1).RyR2(r!4,l!3,Ca~1,CaM,S~1)@ERM + Ca@CP kRyRfon

 flux_RyR2CaM_2: RyR2(r!1,l!4,Ca~1,CaM,S~1).RyR2(r!2,l!1,Ca~1,CaM,S~1).RyR2(r!3,l!2,Ca~1,CaM,S~1).RyR2(r!4,l!3,Ca~1,CaM,S~1)@ERM + Ca@CP -> RyR2(r!1,l!4,Ca~1,CaM,S~1).RyR2(r!2,l!1,Ca~1,CaM,S~1).RyR2(r!3,l!2,Ca~1,CaM,S~1).RyR2(r!4,l!3,Ca~1,CaM,S~1)@ERM + Ca@ERL kRyRfon



end reaction rules

end model


simulate({method=>"nf", t_end=>200,n_steps=>100000})
