<?xml version="1.0" encoding="utf-8"?>
<!-- with no CaM, Ca affinity to RyR of 1 uM fits much better. For RyRCaM Ca affinity should probably 2 uM or 4 uM -->
<ReactionScheme>
  <Specie name="Ca" id="Ca" kdiff="100" kdiffunit="mu2/s"/>
  <Specie name="RyR4CaM" id="RyR4CaM" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca1RyR4CaM" id="Ca1RyR4CaM" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca2RyR4CaM" id="Ca2RyR4CaM" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca3RyR4CaM" id="Ca3RyR4CaM" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4RyR4CaM" id="Ca4RyR4CaM" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4RyR4CaMC" id="Ca4RyR4CaMC" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="O1" id="O1" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="O2" id="O2" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="RyR4CaMI" id="RyR4CaMI" kdiff="0" kdiffunit="mu2/s"/> 

    <Reaction name="RyRCa1" id="RyRCa1">
    <Reactant specieID="RyR4CaM"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca1RyR4CaM"/>
    <forwardRate>10e-3</forwardRate>
    <reverseRate>2.5</reverseRate>
  </Reaction>
  
  <Reaction name="RyRCa2" id="RyRCa2">
    <Reactant specieID="Ca1RyR4CaM"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca2RyR4CaM"/>
    <forwardRate>7.5e-3</forwardRate>
    <reverseRate>5</reverseRate>
 </Reaction>

 <Reaction name="RyRCa3" id="RyRCa3">
    <Reactant specieID="Ca2RyR4CaM"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca3RyR4CaM"/>
    <forwardRate>5e-3</forwardRate>
    <reverseRate>7.5</reverseRate>
 </Reaction>

  <Reaction name="RyRCa4" id="RyRCa4">
    <Reactant specieID="Ca3RyR4CaM"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca4RyR4CaM"/>
    <forwardRate>2.5e-3</forwardRate>
    <reverseRate>10</reverseRate>
 </Reaction>



 <Reaction name="RyRd" id="RyRd">
    <Reactant specieID="Ca4RyR4CaM"/>
    <Product specieID="O1"/>
    <forwardRate>263.66</forwardRate>
    <reverseRate>1.026</reverseRate>
  </Reaction>

  <Reaction name="RyRe" id="RyRe">
    <Reactant specieID="Ca4RyR4CaM"/>
    <Product specieID="O2"/>
    <forwardRate>263.66e-2</forwardRate>
    <reverseRate>1.026e-2</reverseRate>
  </Reaction>
  
  <Reaction name="RyRf" id="RyRf">
    <Reactant specieID="O1"/>
    <Product specieID="Ca4RyR4CaMC"/>
    <forwardRate>0.00734</forwardRate>
    <reverseRate>0.6296</reverseRate>
  </Reaction>


  <Reaction name="RyRg" id="RyRg">
    <Reactant specieID="O2"/>
    <Product specieID="Ca4RyR4CaMC"/>
    <forwardRate>0.00734e2</forwardRate>
    <reverseRate>0.6296e2</reverseRate>
  </Reaction>
  
  
  <Reaction name="RyRh" id="RyRh">
    <Reactant specieID="Ca4RyR4CaMC"/>
    <Product specieID="RyR4CaMI"/>
    <forwardRate>0.48</forwardRate>
    <reverseRate>0.04</reverseRate>
  </Reaction>



 
</ReactionScheme>
