<?xml version="1.0" encoding="utf-8"?>
<ReactionScheme>
  <Specie name="Ca" id="Ca" kdiff="100" kdiffunit="mu2/s"/>
  <Specie name="RyR" id="RyR" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="CaRyR" id="CaRyR" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca3RyR3" id="Ca3RyR3" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca3RyR4" id="Ca3RyR4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca3RyR4O" id="Ca3RyR4O" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4RyR4" id="Ca4RyR4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4RyR4O" id="Ca4RyR4O" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca3RyR4I" id="Ca3RyR4I" kdiff="0" kdiffunit="mu2/s"/>


  <Reaction name="RyRCabinding" id="RyRCabinding">
    <Reactant specieID="RyR"/>
    <Reactant specieID="Ca"/>
    <Product specieID="CaRyR"/>
    <forwardRate>1e-3</forwardRate>
    <reverseRate>100</reverseRate>
 </Reaction><!--Zahradnikova's constants-->

 <Reaction name="RyRCabinding2" id="RyRCabinding2">
    <Reactant specieID="Ca3RyR4"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca4RyR4"/>
    <forwardRate>7.1e-4</forwardRate>
    <reverseRate>3</reverseRate>
 </Reaction><!--Zahradnikova's constants-->

  <Reaction name="RyRa" id="RyRa">
    <Reactant specieID="CaRyR" power="3"/>
    <Reactant specieID="RyR"/>
    <Product specieID="Ca3RyR4"/>
    <forwardRate>1</forwardRate>
    <reverseRate>1000</reverseRate>
 </Reaction>


 <Reaction name="RyRa2" id="RyRa2">
    <Reactant specieID="Ca3RyR3" />
    <Reactant specieID="RyR" />
    <Product specieID="Ca3RyR4"/>
    <forwardRate>1</forwardRate>
    <reverseRate>10</reverseRate>
 </Reaction>

 <Reaction name="RyRa3" id="RyRa3">
    <Reactant specieID="Ca3RyR3" />
    <Reactant specieID="CaRyR"/>
    <Product specieID="Ca4RyR4"/>
    <forwardRate>1</forwardRate>
    <reverseRate>10</reverseRate>
 </Reaction>

 
 

<Reaction name="RyRb" id="RyRb">
    <Reactant specieID="Ca3RyR4"/>
    <Product specieID="Ca3RyR4O"/>
    <forwardRate>762.62</forwardRate>
    <reverseRate>0.001</reverseRate>
  </Reaction>

  <Reaction name="RyRbi" id="RyRbi">
    <Reactant specieID="Ca3RyR4O"/>
    <Product specieID="Ca3RyR4I"/>
    <forwardRate>1</forwardRate>
    <reverseRate>1</reverseRate>
  </Reaction>


 <Reaction name="RyRd" id="RyRd">
    <Reactant specieID="Ca4RyR4"/>
    <Product specieID="Ca4RyR4O"/>
    <forwardRate>762.62</forwardRate>
    <reverseRate>0.001</reverseRate>
  </Reaction>

  <Reaction name="RyRg" id="RyRg">
    <Reactant specieID="Ca"/>
    <Reactant specieID="Ca3RyR4I"/>
    <Product specieID="Ca4RyR4O"/>
    <forwardRate>7.1e-4</forwardRate>
    <reverseRate>3</reverseRate>
  </Reaction>



  <Reaction name="RyRh3" id="RyRh3">
    <Reactant specieID="Ca"/>
    <Reactant specieID="RyR4"/>
    <Product specieID="Ca1RyR4"/>
    <forwardRate>1.0637647852838967 </forwardRate>
    <reverseRate>1.064e3</reverseRate>
  </Reaction>

  
  <Specie name="DMN_buf" id="DMN_buf" kdiff="150" kdiffunit="mu2/s"/>
  <Specie name="CaDMN_buf" id="CaDMN_buf" kdiff="150" kdiffunit="mu2/s"/>
  <!--Faas GC, Karacs K, Vergara JL, Mody I. Kinetic properties of DM-nitrophen binding to calcium and magnesium. Biophys J. 2005 Jun;88(6):4421-33. doi: 10.1529/biophysj.104.057745. Epub 2005 Mar 18. PMID: 15778435; PMCID: PMC1305669.-->
   <Reaction name="DMNtrans" id="DMNtrans">
     <Reactant specieID="DMN_buf"/>
    <Reactant specieID="Ca"/>
    <Product specieID="CaDMN_buf"/>
    <forwardRate>80e-6</forwardRate>
    <reverseRate>0.4e-3</reverseRate>
   </Reaction>

</ReactionScheme>
