<?xml version="1.0" encoding="utf-8"?>

<ReactionScheme>
  <Specie name="Ca" id="Ca" kdiff="100" kdiffunit="mu2/s"/>
  <Specie name="RyR4" id="RyR4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca1RyR4" id="Ca1RyR4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca2RyR4" id="Ca2RyR4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca3RyR4" id="Ca3RyR4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4RyR4" id="Ca4RyR4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4RyR4C" id="Ca4RyR4C" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="O1" id="O1" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="O2" id="O2" kdiff="0" kdiffunit="mu2/s"/>
 <Specie name="RyR4I" id="RyR4I" kdiff="0" kdiffunit="mu2/s"/> 

    <Reaction name="RyRCa1" id="RyRCa1">
    <Reactant specieID="RyR4"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca1RyR4"/>
    <forwardRate>1.e-3</forwardRate>
    <reverseRate>1.</reverseRate>
  </Reaction>
  
  <Reaction name="RyRCa2" id="RyRCa2">
    <Reactant specieID="Ca1RyR4"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca2RyR4"/>
    <forwardRate>0.75e-3</forwardRate>
    <reverseRate>2.</reverseRate>
 </Reaction>

 <Reaction name="RyRCa3" id="RyRCa3">
    <Reactant specieID="Ca2RyR4"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca3RyR4"/>
    <forwardRate>5e-4</forwardRate>
    <reverseRate>3</reverseRate>
 </Reaction>

  <Reaction name="RyRCa4" id="RyRCa4">
    <Reactant specieID="Ca3RyR4"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca4RyR4"/>
    <forwardRate>2.5e-4</forwardRate>
    <reverseRate>4</reverseRate>
 </Reaction>



 <Reaction name="RyRd" id="RyRd">
    <Reactant specieID="Ca4RyR4"/>
    <Product specieID="O1"/>
    <forwardRate>38.4</forwardRate>
    <reverseRate>3</reverseRate>
  </Reaction>

  <Reaction name="RyRe" id="RyRe">
    <Reactant specieID="Ca4RyR4"/>
    <Product specieID="O2"/>
    <forwardRate>38.4e-3</forwardRate>
    <reverseRate>3.e-3</reverseRate>
  </Reaction>
  
  <Reaction name="RyRf" id="RyRf">
    <Reactant specieID="O1"/>
    <Product specieID="Ca4RyR4C"/>
    <forwardRate>0.0025</forwardRate>
    <reverseRate>0.77</reverseRate>
  </Reaction>


  <Reaction name="RyRg" id="RyRg">
    <Reactant specieID="O2"/>
    <Product specieID="Ca4RyR4C"/>
    <forwardRate>0.0025e3</forwardRate>
    <reverseRate>0.77e3</reverseRate>
  </Reaction>
  
  
  <Reaction name="RyRh" id="RyRh">
    <Reactant specieID="Ca4RyR4C"/>
    <Product specieID="RyR4I"/>
    <forwardRate>11.28</forwardRate>
    <reverseRate>0.05</reverseRate>
  </Reaction>



 <!--   <Reaction name="RyRCa1" id="RyRCa1"> -->
 <!--    <Reactant specieID="RyR4"/> -->
 <!--    <Reactant specieID="Ca"/> -->
 <!--    <Product specieID="Ca1RyR4"/> -->
 <!--    <forwardRate>2.9e-4</forwardRate> -->
 <!--    <reverseRate>0.58</reverseRate> -->
 <!--  </Reaction> -->
  
 <!--  <Reaction name="RyRCa2" id="RyRCa2"> -->
 <!--    <Reactant specieID="Ca1RyR4"/> -->
 <!--    <Reactant specieID="Ca"/> -->
 <!--    <Product specieID="Ca2RyR4"/> -->
 <!--    <forwardRate>0.0002175</forwardRate> -->
 <!--    <reverseRate>1.16</reverseRate> -->
 <!-- </Reaction> -->

 <!-- <Reaction name="RyRCa3" id="RyRCa3"> -->
 <!--    <Reactant specieID="Ca2RyR4"/> -->
 <!--    <Reactant specieID="Ca"/> -->
 <!--    <Product specieID="Ca3RyR4"/> -->
 <!--    <forwardRate>0.000145</forwardRate> -->
 <!--    <reverseRate>1.74</reverseRate> -->
 <!-- </Reaction> -->

 <!--  <Reaction name="RyRCa4" id="RyRCa4"> -->
 <!--    <Reactant specieID="Ca3RyR4"/> -->
 <!--    <Reactant specieID="Ca"/> -->
 <!--    <Product specieID="Ca4RyR4"/> -->
 <!--    <forwardRate>7.25e-5</forwardRate> -->
 <!--    <reverseRate>2.32</reverseRate> -->
 <!-- </Reaction> -->



 <!-- <Reaction name="RyRd" id="RyRd"> -->
 <!--    <Reactant specieID="Ca4RyR4"/> -->
 <!--    <Product specieID="O1"/> -->
 <!--    <forwardRate>8.68</forwardRate> -->
 <!--    <reverseRate>2.84</reverseRate> -->
 <!--  </Reaction> -->

 <!--  <Reaction name="RyRe" id="RyRe"> -->
 <!--    <Reactant specieID="Ca4RyR4"/> -->
 <!--    <Product specieID="Ca4RyR4C"/> -->
 <!--    <forwardRate>8.68e-3</forwardRate> -->
 <!--    <reverseRate>2.84e-3</reverseRate> -->
 <!--  </Reaction> -->
  
 <!--  <Reaction name="RyRf" id="RyRf"> -->
 <!--    <Reactant specieID="O1"/> -->
 <!--    <Product specieID="O2"/> -->
 <!--    <forwardRate>0.0003</forwardRate> -->
 <!--    <reverseRate>2.55</reverseRate> -->
 <!--  </Reaction> -->


 <!--  <Reaction name="RyRg" id="RyRg"> -->
 <!--    <Reactant specieID="Ca4RyR4C"/> -->
 <!--    <Product specieID="O2"/> -->
 <!--    <forwardRate>0.0003e3</forwardRate> -->
 <!--    <reverseRate>2.55e3</reverseRate> -->
 <!--  </Reaction> -->
  
  
 <!--  <Reaction name="RyRh" id="RyRh"> -->
 <!--    <Reactant specieID="O2"/> -->
 <!--    <Product specieID="RyR4I"/> -->
 <!--    <forwardRate>4.9</forwardRate> -->
 <!--    <reverseRate>0.087</reverseRate> -->
 <!--  </Reaction> -->
</ReactionScheme>
