<?xml version="1.0" encoding="utf-8"?>
<ReactionScheme>
  <Specie name="Ca" id="Ca" kdiff="100" kdiffunit="mu2/s"/>
  <Specie name="RyR4" id="RyR4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca1RyR4" id="Ca1RyR4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca2RyR4" id="Ca2RyR4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca3RyR4" id="Ca3RyR4" kdiff="0" kdiffunit="mu2/s"/>
  <!-- <Specie name="Ca4RyR4" id="Ca4RyR4" kdiff="0" kdiffunit="mu2/s"/> -->
  <Specie name="Ca4RyR4C" id="Ca4RyR4C" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="O1" id="O1" kdiff="0" kdiffunit="mu2/s"/>
  <!-- <Specie name="O2" id="O2" kdiff="0" kdiffunit="mu2/s"/> -->
  <!-- <Specie name="I" id="I" kdiff="0" kdiffunit="mu2/s"/> -->
  <Reaction name="RyRCa1" id="RyRCa1">
    <Reactant specieID="RyR4"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca1RyR4"/>
    <forwardRate>1.8e-3</forwardRate>
    <reverseRate>18</reverseRate>
  </Reaction>
  
  <Reaction name="RyRCa2" id="RyRCa2">
    <Reactant specieID="Ca1RyR4"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca2RyR4"/>
    <forwardRate>1.35e-03</forwardRate>
    <reverseRate>36</reverseRate>
 </Reaction>

 <Reaction name="RyRCa3" id="RyRCa3">
    <Reactant specieID="Ca2RyR4"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca3RyR4"/>
    <forwardRate>9e-4</forwardRate>
    <reverseRate>54</reverseRate>
 </Reaction>

  <Reaction name="RyRCa4" id="RyRCa4">
    <Reactant specieID="Ca3RyR4"/>
    <Reactant specieID="Ca"/>
    <Product specieID="O1"/>
    <forwardRate>4.5e-4</forwardRate>
    <reverseRate>72</reverseRate>
 </Reaction>



 <!-- <Reaction name="RyRd" id="RyRd"> -->
 <!--    <Reactant specieID="Ca4RyR4"/> -->
 <!--    <Product specieID="O1"/> -->
 <!--    <forwardRate>294</forwardRate> -->
 <!--    <reverseRate>0.36</reverseRate> -->
 <!--  </Reaction> -->

 <!--  <Reaction name="RyRe" id="RyRe"> -->
 <!--    <Reactant specieID="Ca4RyR4"/> -->
 <!--    <Product specieID="Ca4RyR4C"/> -->
 <!--    <forwardRate>294e-3</forwardRate> -->
 <!--    <reverseRate>0.36e-3</reverseRate> -->
 <!--  </Reaction> -->
  
  <Reaction name="RyRf" id="RyRf">
    <Reactant specieID="O1"/>
    <Product specieID="Ca4RyR4C"/>
    <forwardRate>0.0004</forwardRate>
    <reverseRate>0.002</reverseRate>
  </Reaction>


 <!--  <Reaction name="RyRg" id="RyRg"> -->
 <!--    <Reactant specieID="Ca4RyR4C"/> -->
 <!--    <Product specieID="O2"/> -->
 <!--    <forwardRate>0.15e3</forwardRate> -->
 <!--    <reverseRate>0.002e3</reverseRate> -->
 <!--  </Reaction> -->

  
  <!-- <Reaction name="RyRg" id="RyRg"> -->
  <!--   <Reactant specieID="O2"/> -->
  <!--   <Product specieID="I"/> -->
  <!--   <forwardRate>5e-4</forwardRate> -->
  <!--   <reverseRate>1.5e-3</reverseRate> -->
  <!-- </Reaction> -->
  <Specie name="DMN_buf" id="DMN_buf" kdiff="150" kdiffunit="mu2/s"/>
  <Specie name="CaDMN_buf" id="CaDMN_buf" kdiff="150" kdiffunit="mu2/s"/>
  <!--Faas GC, Karacs K, Vergara JL, Mody I. Kinetic properties of DM-nitrophen binding to calcium and magnesium. Biophys J. 2005 Jun;88(6):4421-33. doi: 10.1529/biophysj.104.057745. Epub 2005 Mar 18. PMID: 15778435; PMCID: PMC1305669.-->
   <Reaction name="DMNtrans" id="DMNtrans">
     <Reactant specieID="DMN_buf"/>
    <Reactant specieID="Ca"/>
    <Product specieID="CaDMN_buf"/>
    <forwardRate>80e-6</forwardRate>
    <reverseRate>0.4e-4</reverseRate>
   </Reaction>

</ReactionScheme>
